PsychoPy2experiment version="2023.2.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  color = -1.0000, -1.0000, -1.0000
  expName = Trial1
  keyboardBackend = ioHub
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Routines
  Routine trial
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    TextComponent cross
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.75
      text = +
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    SoundComponent sound_1
      sound [set every repeat] = $sound
      startVal [time (s)] = 2
      stopVal [duration (s)] = 3.75
      syncScreenRefresh = False
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  Routine Instruction
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    TextComponent Instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        Instructions :

        “Press 1 for ‘ba’, 2 for ‘da’, and 3 for ‘ga’.

        Press any key to begin.”
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Responses
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 5.75
      stopVal [duration (s)] = 3.0
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      text:
        PRESS 1- for BASH ,2 for DASH and 3 for GASH

        Report the sequence :

            1                    2                   3
        BASH            DASH          GASH
Flow
  Routine Instruction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $audio_file_paths
    loopType = random
    nReps = 400
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    Routine trial
    Routine Responses
  LoopTerminator trials
