PsychoPy2experiment version="2023.2.1"
Settings
  Audio latency priority = 0
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  color = -1.0000, -1.0000, -1.0000
  expName = Trial_mult
  keyboardBackend = ioHub
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Routines
  Routine trial
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    TextComponent cross
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.750590
      text = +
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    SoundComponent sound_1
      sound [set every repeat] = $audio
      startVal [time (s)] = 2
      stopVal [duration (s)] = 3.750590
      stopWithRoutine = False
      syncScreenRefresh = False
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  Routine Instruction
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    TextComponent Instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        Instructions :

        “Press 1 for ‘ba’, 2 for ‘da’, and 3 for ‘ga’.

        Press any key to begin.”
    KeyboardComponent resp_start
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        condfile='audio_file_paths.csv'
  Routine Responses
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    TextComponent respp
      letterHeight = 0.05
      startVal [time (s)] = 5.750590
      stopVal [duration (s)] = 4.25
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      text:
        PRESS 1- for BASH ,2 for DASH and 3 for GASH

        Report the sequence :

            1                    2                   3
        BASH            DASH          GASH
    KeyboardComponent key_resp
      allowedKeys = ['1','2','3']
      forceEndRoutine = False
      registerOn = release
      startVal [time (s)] = 5.750590
      stopVal [duration (s)] = 4.25
      store = all keys
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    CodeComponent Resp_code
      Code Type = Auto->JS
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      Begin Routine:
        key_resp.keys = []  # Initialize an empty list to store key responses
      Each Frame:
        # Get the keys pressed in this frame
        theseKeys = key_resp.getKeys(keyList=['1', '2', '3'], waitRelease=False)

        # Store each key pressed in the list, but only if less than 3 keys have been pressed
        for key in theseKeys:
            if len(key_resp.keys) < 3:
                key_resp.keys.append(key.name)

        # End the routine if three keys have been recorded
        if len(key_resp.keys) == 3:
            continueRoutine = False
      End Routine:
        # Ensure we have exactly three responses recorded; if not, fill with 'NA'
        while len(key_resp.keys) < 3:
            key_resp.keys.append('NA')

        # Store the responses in the data file
        thisExp.addData('response1', key_resp.keys[0])
        thisExp.addData('response2', key_resp.keys[1])
        thisExp.addData('response3', key_resp.keys[2])
Flow
  Routine Instruction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $condfile
    loopType = sequential
    nReps = 1
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    conditions:
      [{'audio': 'block1_trial1_attendright_leadtarget.wav'},
      {'audio': 'block1_trial2_attendright_leadmasker.wav'},
      {'audio': 'block1_trial3_attendleft_leadmasker.wav'},
      {'audio': 'block1_trial4_attendright_leadtarget.wav'},
      {'audio': 'block1_trial5_attendleft_leadtarget.wav'},
      {'audio': 'block1_trial6_attendright_leadtarget.wav'},
      {'audio': 'block1_trial7_attendleft_leadtarget.wav'},
      {'audio': 'block1_trial8_attendleft_leadtarget.wav'},
      {'audio': 'block1_trial9_attendleft_leadmasker.wav'},
      {'audio': 'block1_trial10_attendright_leadmasker.wav'},
      {'audio': 'block1_trial11_attendleft_leadtarget.wav'},
      {'audio': 'block1_trial12_attendright_leadtarget.wav'},
      {'audio': 'block1_trial13_attendleft_leadmasker.wav'},
      {'audio': 'block1_trial14_attendright_leadmasker.wav'},
      {'audio': 'block1_trial15_attendleft_leadtarget.wav'},
      {'audio': 'block1_trial16_attendleft_leadmasker.wav'},
      {'audio': 'block1_trial17_attendleft_leadtarget.wav'},
      {'audio': 'block1_trial18_attendleft_leadmasker.wav'},
      {'audio': 'block1_trial19_attendright_leadmasker.wav'},
      {'audio': 'block1_trial20_attendright_leadtarget.wav'},
      {'audio': 'block1_trial21_attendright_leadmasker.wav'},
      {'audio': 'block1_trial22_attendleft_leadmasker.wav'},
      {'audio': 'block1_trial23_attendleft_leadmasker.wav'},
      {'audio': 'block1_trial24_attendleft_leadtarget.wav'},
      {'audio': 'block1_trial25_attendright_leadmasker.wav'},
      {'audio': 'block1_trial26_attendleft_leadmasker.wav'},
      {'audio': 'block1_trial27_attendleft_leadmasker.wav'},
      {'audio': 'block1_trial28_attendright_leadtarget.wav'}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
    Routine trial
    Routine Responses
  LoopTerminator trials
