PsychoPy2experiment version="2023.2.1"
Settings
  Audio latency priority = 4
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2022.2.4
  Window size (pixels) = [1536, 864]
  color = -1.0000, -1.0000, -1.0000
  expName = Trial_mult
  keyboardBackend = ioHub
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Routines
  Routine trial
    TextComponent cross
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.750590
      text = +
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    SoundComponent sound_1
      sound [set every repeat] = $audio
      startVal [time (s)] = 2
      stopVal [duration (s)] = 3.750590
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    TextComponent text3
      letterHeight = 0.05
      startVal [time (s)] = 5.750590
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      text:
        PRESS 1- for BASH ,2 for DASH and 3 for GASH

        Report the sequence :

            1                    2                   3
        BASH            DASH          GASH
    KeyboardComponent resp1
      allowedKeys [set every repeat] = '1','2','3'
      forceEndRoutine = True
      startVal [time (s)] = 5.750590
      store = all keys
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  Routine Instruction
    TextComponent Instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        Instructions :

        “Press 1 for ‘ba’, 2 for ‘da’, and 3 for ‘ga’.

        Press any key to begin.”
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        condfile='audio_file_paths.xlsx'
Flow
  Routine Instruction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $condfile
    loopType = sequential
    nReps = 1
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    conditions:
      [{'audio': 'block1_trial1_attendright_leadtarget.wav'},
      {'audio': 'block1_trial2_attendright_leadmasker.wav'},
      {'audio': 'block1_trial3_attendleft_leadmasker.wav'},
      {'audio': 'block1_trial4_attendright_leadtarget.wav'},
      {'audio': 'block1_trial5_attendleft_leadtarget.wav'},
      {'audio': 'block1_trial6_attendright_leadtarget.wav'},
      {'audio': 'block1_trial7_attendleft_leadtarget.wav'},
      {'audio': 'block1_trial8_attendleft_leadtarget.wav'},
      {'audio': 'block1_trial9_attendleft_leadmasker.wav'},
      {'audio': 'block1_trial10_attendright_leadmasker.wav'},
      {'audio': 'block1_trial11_attendleft_leadtarget.wav'},
      {'audio': 'block1_trial12_attendright_leadtarget.wav'},
      {'audio': 'block1_trial13_attendleft_leadmasker.wav'},
      {'audio': 'block1_trial14_attendright_leadmasker.wav'},
      {'audio': 'block1_trial15_attendleft_leadtarget.wav'},
      {'audio': 'block1_trial16_attendleft_leadmasker.wav'},
      {'audio': 'block1_trial17_attendleft_leadtarget.wav'},
      {'audio': 'block1_trial18_attendleft_leadmasker.wav'},
      {'audio': 'block1_trial19_attendright_leadmasker.wav'},
      {'audio': 'block1_trial20_attendright_leadtarget.wav'},
      {'audio': 'block1_trial21_attendright_leadmasker.wav'},
      {'audio': 'block1_trial22_attendleft_leadmasker.wav'},
      {'audio': 'block1_trial23_attendleft_leadmasker.wav'},
      {'audio': 'block1_trial24_attendleft_leadtarget.wav'},
      {'audio': 'block1_trial25_attendright_leadmasker.wav'},
      {'audio': 'block1_trial26_attendleft_leadmasker.wav'},
      {'audio': 'block1_trial27_attendleft_leadmasker.wav'},
      {'audio': 'block1_trial28_attendright_leadtarget.wav'}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
    Routine trial
  LoopTerminator trials
